OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

0x341d3912 HelloWorld
  Frequency (Hz) = 1.0
  My greeting = Hello World!

CSV File Reader => #1
  Filename = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/Convert/output/converted_OpenBCI-RAW-Right_leg.csv
#1.Output stream -> Temporal filter "8 - 15 Hz" => #2
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 15
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "x²"
  Equation = x*x
-> Signal average
-> Epoch average => #5
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 32
-> Channel Selector "1;2" => #6
  Channel List = 1;2
  Action = Select
  Channel Matching Method = Smart
Matrix=#6 -> Continuous Bitmap
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 50
  Matrix Count = 50
  Gain = 0.025
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
Matrix=#6 -> Continuous Multi Oscilloscope
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 50
  Matrix Count = 50
  Positive Data Only ? = true
  Gain = 0.015
  Caption =
  Tranlucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
#5 -> 0x341d3912 2D Topography
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Gain = 0.02
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
#5 -> 0x341d3912 3D Topography
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Gain = 0.025
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
Matrix=#5 -> 0x341d3912 Continuous Bars
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 47
  Matrix Count = 50
  Positive Data Only ? = true
  Gain = 0.05
  Caption =
  Tranlucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
Data=#2, Stimulations=#1.Output stimulation -> 0x341d3912 Signal display
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 50
  Vertical Offset = 0
  Time Scale = 5.000000
  Bottom ruler = true
  Left ruler = true
  Multiview = true
Matrix=#2, Markers=#1.Output stimulation -> 0x341d3912 Continuous Oscilloscope - All Channels
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 50
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 0.1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColor}

Simple DSP "DSP: a > b ? a : b"
  Equation = x
