OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

CSV File Reader => #0
  Filename = /home/krohak/Documents/FYP/LexiCon/Convert/output/converted_OpenBCI-RAW-Right_leg.csv
#0.Output stream -> Channel Selector "1;2"
  Channel List = 1;2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "8 - 15 Hz"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 15
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "x²"
  Equation = x*x
-> Signal average
-> Epoch average => #5
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 32
-> 0x341d3912 Simple DSP "30" => #6
  Equation = 30
Input - A=#5, Input - B=#6 -> 0x341d3912 Simple DSP "a > b ? a : b"
  Equation = a > b? a: b
#5 -> Crop => #8
  Crop method = Min/Max
  Min crop value = 30
  Max crop value = 100
Matrix=#8 -> Continuous Multi Oscilloscope
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 50
  Matrix Count = 50
  Positive Data Only ? = true
  Gain = 0.015
  Caption =
  Tranlucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
#8 -> 0x341d3912 HelloWorldWithInput
  Message = Hello!
