OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "8 - 15 Hz"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 15
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "x²"
  Equation = x*x
-> Signal average
-> Epoch average => #5
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 32
-> 0x341d3912 Simple DSP "30" => #6
  Equation = 30
Input - A=#5, Input - B=#6 -> 0x341d3912 Simple DSP "a > b ? a : b"
  Equation = a > b? a: b
#5 -> Crop => #8
  Crop method = Min/Max
  Min crop value = 30
  Max crop value = 100
-> 0x341d3912 Spatial Filter => #9
  Spatial Filter Coefficients = 0;1;0;1;0;1;0;1;0;1;0;1;0;1;0;1;0;1;0;1;0;1;0;1;0;1;0;1;0;1;0;1;
  Number of Output Channels = 2
  Number of Input Channels = 2
  Filter matrix file =
-> 0x341d3912 Simple DSP "x-10" => #10
  Equation = x - 40
-> 0x341d3912 Zero-Crossing Detector
  Hysteresis threshold = 0.01
  Rythm estimation window (in sec) = 10
  Negative-to-positive stimulation = OVTK_StimulationId_ThresholdPassed_Positive
  Positive-to-negative stimulation = OVTK_StimulationId_ThresholdPassed_Negative
#10 -> 0x341d3912 Simple DSP "log(x)" => #12
  Equation = log(x)
-> 0x341d3912 HelloWorldWithInput
  Message = Hello!
Matrix=#12 -> 0x341d3912 Continuous Multi Oscilloscope
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 50
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 0.015
  Caption =
  Tranlucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
Matrix=#10 -> 0x341d3912 Continuous Multi Oscilloscope
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 50
  Matrix Count = 50
  Positive Data Only ? = false
  Gain = 0.015
  Caption =
  Tranlucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
Matrix=#9 -> 0x341d3912 Continuous Multi Oscilloscope
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 50
  Matrix Count = 50
  Positive Data Only ? = true
  Gain = 0.015
  Caption =
  Tranlucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
#8 -> 0x341d3912 HelloWorldWithInput
  Message = Hello!
Matrix=#8 -> Continuous Multi Oscilloscope
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 50
  Matrix Count = 50
  Positive Data Only ? = true
  Gain = 0.015
  Caption =
  Tranlucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
Matrix=#5 -> Continuous Multi Oscilloscope
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 50
  Matrix Count = 50
  Positive Data Only ? = true
  Gain = 0.015
  Caption =
  Tranlucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
