OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  File Reader
  10 (+1 ref) channels, 512 Hz, 32 samples per block
  Hand Motor Imagery session
Comment
  Reference Channel
  The reference channel is 'Nz'
Comment
  Temporal Filter
  Filter below 50Hz
Comment
  Epoching
  We slice the signal into 1s epochs
  every 1/16th second.
  We then average the last 32 epochs
Comment
  Spectral Analysis
  Apply a FFT to the input signal
  We only take the amplitude output
Comment
  Advanced Visualization:
  Instant Bars

  Displays the spectrum
  As all input values are positive, we activate
  the corresponding box  setting

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Signal Decimation
  Decimation factor = 5
-> Temporal filter "8-30 Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 15
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Epoch average
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 32
-> Spectral Analysis => #6
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#6.Amplitude -> Instant Bitmap
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Gain = 0.025
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
#6.Amplitude -> 0x341d3912 Instant Bars
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 0.02
  Caption =
  Tranlucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
