OpenViBE-Scenario(FormatVersion=1, Creator=OpenVIBE, CreatorVersion=0.0.0)
Comment
  File Reader
  10 (+1 ref) channels, 512 Hz, 32 samples per block
  Hand Motor Imagery session
Comment
  Reference Channel
  The reference channel is 'Nz'
Comment
  Temporal Filter
  Filter below 50Hz
Comment
  Epoching
  We slice the signal into 1s epochs
  every 1/16th second.
  We then average the last 32 epochs
Comment
  Spectral Analysis
  Apply a FFT to the input signal
  We only take the amplitude output
Comment
  Advanced Visualization:
  Instant Bars

  Displays the spectrum
  As all input values are positive, we activate
  the corresponding box  setting

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 1 -> 0xc67a01dc Signal Decimation
  Decimation factor = 4
-> Temporal filter "8-30 Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.5
-> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Temporal filter "2-48 Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 2
  High cut frequency (Hz) = 48
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Epoch average
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 32
-> Spectral Analysis => #7
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#7.Amplitude -> Instant Bars
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 0.02
  Caption =
  Tranlucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
