OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Generic stream reader => #0
  Filename = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/Data/trial-2019-03-15-1.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 1
-> CSP Spatial Filter
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-15-csp-spatial-filter-alpha.cfg
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #6
  Equation = log(1+x)
-> Univariate Statistics => #7
  Mean = true
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
Input - A=#6, Input - B=#7.Mean, Input - C=#7.Variance -> Simple DSP "Standard Score" => #8
  Equation = (A-B)/C
Input signal=#8, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Left trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching => #10
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
Input signal=#8, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Right trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching => #12
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
#1.Output stream 1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 38
  Pass band ripple (dB) = 1
-> CSP Spatial Filter
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-15-csp-spatial-filter-beta.cfg
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #17
  Equation = log(1+x)
-> Univariate Statistics => #18
  Mean = true
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
Input - A=#17, Input - B=#18.Mean, Input - C=#18.Variance -> Simple DSP "Standard Score" => #19
  Equation = (A-B)/C
Input signal=#19 -> Stimulation based epoching "Left trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching => #21
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
Input stream 1=#10, Input stream 2=#21 -> Left Feature aggregator => #22
Input signal=#19 -> Stimulation based epoching "Right trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching => #24
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
Input stream 1=#12, Input stream 2=#24 -> Right Feature aggregator => #25
Stimulations=#1.Output stream 2, Features for class 1=#22, Features for class 2=#25 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/2-Classifier Trainer/2019-03-21-15-1-motor-imagery-bci-config-classifier-alpha-beta.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 2
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
