OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Trials were separated into two groups per subject, one for movement and one for
  imagery. Each group was pseudo-randomly divided into a training set (80% of trials)
  and a testing set (20% of trials). All data were independently filtered using a spatial filter
  (independent component analysis, ICA), which attenuated the signal components
  associated with noise; and a temporal filter (discrete wavelet transformation, DWT),
  which applied a transformation to make relevant neural signals more accessible (it
  extracted features).

  https://www.ncbi.nlm.nih.gov/pmc/articles/PMC2602863/

Generic stream reader => #0
  Filename = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/Data/trial-2019-03-19-2.ov
#0.Output stream 2 -> 0x341d3912 Independent Component Analysis (FastICA) => #1
  Number of components to extract = 4
  Operating mode = ICA
  Sample size (seconds) for estimation = 120
  Decomposition type = Symmetric
  Max number of reps for the ICA convergence = 100000
  Fine tuning = true
  Max number of reps for the fine tuning = 100
  Used nonlinearity = Tanh
  Internal Mu parameter for FastICA = 1.0
  Internal Epsilon parameter for FastICA = 0.0001
  Spatial filter filename =
  Save the spatial filter/demixing matrix = false
Data=#1 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> 0x341d3912 Discrete Wavelet Transform => #3
  Wavelet type = bior1.3
  Wavelet decomposition levels = 2
Data=#3.A -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#0.Output stream 2 -> OG Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Output stream 2 -> Epoch variance => #6
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 10000
  Significance level = 0.01
Input - A=#0.Output stream 2, Input - B=#6.Averaged epochs, Input - C=#6.Variance of epochs -> Simple DSP "Standard Score" => #7
  Equation = (A-B)/C
Data=#7 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
