OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Overview

  This scenario trains the Common Spatial Pattern spatial filter
  that will be used in the further steps.

  The EEG signal is filtered in a large frequency band [8-30 Hz].

  Then the Stimulation based epoching boxes
  provide examples for the CSP Spatial Filter Trainer :
  class 1: LEFT trials
  class 2: RIGHT trials

  At the end of the training process,
  the CSP trainer outputs the stimulation
  OVTK_StimulationId_TrainCompleted on success,
  telling the Player Controller to pause the scenario.
Comment
  --:: Remember to change the file
  to the one you recorded before!

Generic stream reader => #0
  Filename = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/Data/trial-2019-03-23-1.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 16
  Pass band ripple (dB) = 1
Input signal=#2, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Left trials" => #3
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Input signal=#2, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Right trials" => #4
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
Stimulations=#1.Output stream 2, Signal condition 1=#3, Signal condition 2=#4 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-23-1-csp-spatial-filter-12-16Hz.cfg
  Filter dimension = 6
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
#1.Output stream 1 -> Temporal filter => #7
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 8
  Pass band ripple (dB) = 1
Input signal=#7, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Left trials" => #8
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Input signal=#7, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Right trials" => #9
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
Stimulations=#1.Output stream 2, Signal condition 1=#8, Signal condition 2=#9 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-23-1-csp-spatial-filter-4-8Hz.cfg
  Filter dimension = 6
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
#1.Output stream 1 -> Temporal filter => #12
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 1
Input signal=#12, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Left trials" => #13
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Input signal=#12, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Right trials" => #14
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
Stimulations=#1.Output stream 2, Signal condition 1=#13, Signal condition 2=#14 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-23-1-csp-spatial-filter-8-12Hz.cfg
  Filter dimension = 6
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
#1.Output stream 1 -> Temporal filter => #17
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 16
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 1
Input signal=#17, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Left trials" => #18
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Input signal=#17, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Right trials" => #19
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
Stimulations=#1.Output stream 2, Signal condition 1=#18, Signal condition 2=#19 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-23-1-csp-spatial-filter-16-20Hz.cfg
  Filter dimension = 6
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
#1.Output stream 1 -> Temporal filter => #22
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 20
  High cut frequency (Hz) = 38
  Pass band ripple (dB) = 1
Input signal=#22, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Left trials" => #23
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Input signal=#22, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Right trials" => #24
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
Stimulations=#1.Output stream 2, Signal condition 1=#23, Signal condition 2=#24 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-23-1-csp-spatial-filter-20-38Hz.cfg
  Filter dimension = 6
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
