OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used online once the
  CSP spatial filter and the classifier is trained.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Then comes the feature extraction part.

  The signal is filtered in a large alpha/beta [8 30] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  Finally, the feature vectors are classifier with an LDA
  classifier. Note that the state vector of the classifier
  (which in the case of the LDA is the distance to the
  separation plane) is sent to the Graz Visualization
  box for feedback !

  In order to display correct feedback,
  the Graz Visualization box expects a negative
  value for one class and a positive value for the other
  class.

0x341d3912 Generic stream reader
  Filename = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/Data/motor-imagery-csp-4-online-[2019.03.13-20.41.21].ov

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#1.Signal stream, Input stream 2=#1.Stimulations, Input stream 3=#1.Experiment information -> Identity => #2
Input stream 1=#2.Output stream 3, Input stream 2=#2.Output stream 1, Input stream 3=#2.Output stream 2 -> Generic stream writer
  Filename = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/Data/trial-2019-03-23-1-motor-imagery-csp-4-online-alpha-beta-[$core{date}-$core{time}].ov
  Use compression = false
#2.Output stream 1 -> Channel Selector "1:16" => #4
  Channel List = 1:16
  Action = Select
  Channel Matching Method = Smart
Data=#4 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#4 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 8
  Pass band ripple (dB) = 1
-> CSP Spatial Filter
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-23-1-csp-spatial-filter-4-8Hz.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
#4 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 16
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 1
-> CSP Spatial Filter
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-23-1-csp-spatial-filter-16-20Hz.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #17
  Equation = log(1+x)
#4 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 20
  High cut frequency (Hz) = 38
  Pass band ripple (dB) = 1
-> CSP Spatial Filter
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-23-1-csp-spatial-filter-20-38Hz.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #23
  Equation = log(1+x)
#4 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 16
  Pass band ripple (dB) = 1
-> CSP Spatial Filter
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-23-1-csp-spatial-filter-12-16Hz.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #29
  Equation = log(1+x)
#4 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 1
-> CSP Spatial Filter
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-23-1-csp-spatial-filter-8-12Hz.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #35
  Equation = log(1+x)
Input stream 1=#35, Input stream 2=#35, Input stream 3=#29, Input stream 4=#17, Input stream 5=#23 -> Feature aggregator => #36
-> 0x341d3912 Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#36 -> 0x341d3912 Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Features=#36, Commands=#2.Output stream 2 -> Classifier processor => #39
  Filename to load configuration from = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/2-Classifier Trainer/trial-2019-03-23-1-motor-imagery-bci-config-classifier-alpha-beta.cfg
#39.Probability values -> 0x341d3912 Simple DSP
  Equation = x-10
#39.Hyperplane distance -> 0x341d3912 Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#39.Probability values -> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
0x341d3912 Graz Motor Imagery BCI Stimulator => #43
  Lua Script = C:/Program Files (x86)/openvibe-2.2.0/share/openvibe/scenarios/bci-examples/motor-imagery-CSP/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
Stimulations=#43, Amplitude=#39.Hyperplane distance -> 0x341d3912 Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false

0x341d3912 Simple DSP "Shift Values to Negative" => #45
  Equation = x-3
-> 0x341d3912 Sign Change Detector
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 1
-> 0x341d3912 Run Command
  Stimulation 1 = OVTK_StimulationId_Label_01
  Command 1 = "C:/Program Files (x86)/AutoIt3/AutoIt3_x64.exe" C:/Users/ajay/Documents/LexiCon/OpenVibe/OpenViBE-workshop_tie-fighter-demo/press_space.au3
Data=#45 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

0x341d3912 Channel Selector "1;2"
  Channel List = 1;2
  Action = Select
  Channel Matching Method = Smart
