OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard
0x9f5c4075 = Signal Monitoring
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The Temporal Filter
  box transform the signal
  so you can see what is actually
  used online.
Comment
  Overview

  This scenario can be used in order
  to check the quality of the signals
  before starting an experiment.

  One should definitely
  check the quality of the signals
  and ensure that :

  - eye blinks are visible
  - jaw clenching are visible
  - alpha waves are visible when closing eyes

0x341d3912 Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> 0x341d3912 Channel Selector "1:16" => #1
  Channel List = 1:16
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 40.000000
  Pass band ripple (dB) = 0.500000
Input stream 1=#2, Input stream 2=#1, Input stream 3=#0.Stimulations -> 0x341d3912 Identity => #3
  0xac367a9c = 6
Data=#3.Output stream 1, Stimulations=#3.Output stream 3 -> 0x341d3912 Signal display "Raw signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#3.Output stream 2, Stimulations=#3.Output stream 3 -> 0x341d3912 Signal display "Filtered signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false

Generic stream reader => #6
  Filename = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/Data/trial-13-3-2019-2-no-blue.ov
#6.Output stream 2 -> Channel Selector "1:16"
  Channel List = 1:16
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 50
  Pass band ripple (dB) = 1
-> Signal average => #9
Data=#9, Stimulations=#6.Output stream 3 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream 1=#9, Input stream 2=#9 -> Feature aggregator
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Input stream=#9, Stimulations stream=#6.Output stream 3 -> 0x341d3912 CSV File Writer
  Filename = C:/Users/ajay/Documents/LexiCon/record-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
