OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA

Graz Motor Imagery BCI Stimulator => #0
  Lua Script = C:/Program Files/openvibe-2.2.0-64bit/share/openvibe/scenarios/bci-examples/motor-imagery-CSP/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
Stimulations=#0 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false

Acquisition client => #2
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#2.Signal stream -> Channel Selector "1:16" => #3
  Channel List = 1:16
  Action = Select
  Channel Matching Method = Smart
Input stream 1=#2.Experiment information, Input stream 2=#3, Input stream 3=#2.Stimulations -> Generic stream writer
  Filename = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/Data/trial-2019-03-15-1.ov
  Use compression = false
#2.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
