OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA

Generic stream reader => #0
  Filename = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/Data/trial-2019-03-27-1.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 30
  High cut frequency (Hz) = 38
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #3
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-27-1-csp-spatial-filter-4-8Hz.cfg
Input signal=#3, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Left trials" => #4
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Input signal=#3, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Right trials" => #5
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
#1.Output stream 1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #7
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-27-1-csp-spatial-filter-8-12Hz.cfg
Input signal=#7, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Left trials" => #8
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Input signal=#7, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Right trials" => #9
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
#1.Output stream 1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 16
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #11
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-27-1-csp-spatial-filter-12-16Hz.cfg
Input signal=#11, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Left trials" => #12
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Input signal=#11, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Right trials" => #13
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
#1.Output stream 1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 16
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #15
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-27-1-csp-spatial-filter-16-20Hz.cfg
Input signal=#15, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Left trials" => #16
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Input signal=#15, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Right trials" => #17
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
#1.Output stream 1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 20
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #19
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-27-1-csp-spatial-filter-20-38Hz.cfg
Input signal=#19, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Left trials" => #20
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Input signal=#19, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Right trials" => #21
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
#1.Output stream 1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 20
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #23
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-27-1-csp-spatial-filter-20-25Hz.cfg
Input signal=#23, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Left trials" => #24
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Input 1=#8, Input 2=#12, Input 3=#16, Input 4=#20, Input 5=#4, Input 6=#24 -> Signal Merger
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #29
  Equation = log(1+x)
-> Left Feature aggregator => #30
-> 0x341d3912 Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#29 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#23, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Right trials" => #33
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
Input 1=#9, Input 2=#13, Input 3=#17, Input 4=#21, Input 5=#5, Input 6=#33 -> Signal Merger
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #38
  Equation = log(1+x)
-> Left Feature aggregator => #39
Stimulations=#1.Output stream 2, Features for class 1=#30, Features for class 2=#39 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/2-Classifier Trainer/trial-2019-03-27-1-motor-imagery-bci-config-classifier-alpha-beta.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
#39 -> 0x341d3912 Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#38 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
