OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  --:: Remember to change the file
  to the one you recorded before!
Comment
  Overview

  This scenario should be used to train
  the LDA classifier used to detect
  left / right hand movements

  Just configure the Generic Stream Reader
  box to point to the last file you recorded with
  scenario 1-acquisition or 4-online and fast forward
  this scenario.

  At the end of the training, you will have an estimation
  of the classifier performance printed in the console.
  If this performance is lower than 65%, just run a new
  1-acquisition session to have better results.
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Then comes the feature extraction part.

  The signal is filtered in a large alpha/beta [8 30] Hz range.

  Then the Stimulation Based Epoching box
  is used to select four seconds of signal half a second
  after the instruction was shown to the user
  (OVTK_GDF_Left and OVTK_GDF_Right).

  The signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  The Classifier Trainer box produces a
  configuration file at the end of the experiment
  which will be used during online sessions.

  When the training is completed the box
  outputs a stimulation OVTK_StimulationId_TrainCompleted
  to stop the scenario through a Player Controller

Generic stream reader => #0
  Filename = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/Data/trial-2019-03-23-1.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 8
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #3
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-23-1-csp-spatial-filter-4-8Hz.cfg
Input signal=#3, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Left trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #8
  Equation = log(1+x)
Input signal=#3, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Right trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #13
  Equation = log(1+x)
#1.Output stream 1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #15
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-23-1-csp-spatial-filter-8-12Hz.cfg
Input signal=#15, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Left trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #20
  Equation = log(1+x)
Data=#20 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#15, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Right trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #26
  Equation = log(1+x)
Data=#26 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1.Output stream 1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 16
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #29
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-23-1-csp-spatial-filter-12-16Hz.cfg
Input signal=#29, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Left trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #34
  Equation = log(1+x)
Input signal=#29, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Right trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #39
  Equation = log(1+x)
#1.Output stream 1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 16
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #41
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-23-1-csp-spatial-filter-16-20Hz.cfg
Input signal=#41, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Left trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #46
  Equation = log(1+x)
Input signal=#41, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Right trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #51
  Equation = log(1+x)
#1.Output stream 1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 20
  High cut frequency (Hz) = 38
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #53
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-23-1-csp-spatial-filter-20-38Hz.cfg
Input signal=#53, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Left trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #58
  Equation = log(1+x)
Input stream 1=#8, Input stream 2=#20, Input stream 3=#34, Input stream 4=#46, Input stream 5=#58 -> Left Feature aggregator => #59
-> 0x341d3912 Left Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Input signal=#53, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Right trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #65
  Equation = log(1+x)
Input stream 1=#13, Input stream 2=#26, Input stream 3=#39, Input stream 4=#51, Input stream 5=#65 -> Right Feature aggregator => #66
Stimulations=#1.Output stream 2, Features for class 1=#59, Features for class 2=#66 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/2-Classifier Trainer/trial-2019-03-23-1-motor-imagery-bci-config-classifier-alpha-beta.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
#66 -> 0x341d3912 Right Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
