OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA

Generic stream reader => #0
  Filename = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/Data/trial-13-3-2019-1-working.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3, Input stream 3=#0.Output stream 1 -> Identity => #1
Input stream 1=#1.Output stream 3, Input stream 2=#1.Output stream 1, Input stream 3=#1.Output stream 2 -> Generic stream writer
  Filename = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/Data/trial-2019-03-23-1-motor-imagery-csp-4-online-alpha-beta-[$core{date}-$core{time}].ov
  Use compression = false
#1.Output stream 1 -> Channel Selector "1:16" => #3
  Channel List = 1:16
  Action = Select
  Channel Matching Method = Smart
Data=#3 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#3 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 30
  High cut frequency (Hz) = 38
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #6
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-27-1-csp-spatial-filter-4-8Hz.cfg
#3 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 16
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #8
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-27-1-csp-spatial-filter-16-20Hz.cfg
#3 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 20
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #10
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-27-1-csp-spatial-filter-20-38Hz.cfg
#3 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 25
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #12
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-27-1-csp-spatial-filter-20-38Hz.cfg
#3 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 16
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #14
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-27-1-csp-spatial-filter-12-16Hz.cfg
#3 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #16
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-27-1-csp-spatial-filter-8-12Hz.cfg
Input 1=#16, Input 2=#14, Input 3=#8, Input 4=#10, Input 5=#6, Input 6=#12 -> Signal Merger
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #22
Features=#22, Commands=#1.Output stream 2 -> Classifier processor => #23
  Filename to load configuration from = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/2-Classifier Trainer/trial-2019-03-27-1-motor-imagery-bci-config-classifier-alpha-beta.cfg
#23.Probability values -> 0x341d3912 Simple DSP
  Equation = x-10
#23.Labels -> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /a/b/c
#23.Hyperplane distance -> 0x341d3912 Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#23.Probability values -> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#22 -> 0x341d3912 Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Graz Motor Imagery BCI Stimulator => #29
  Lua Script = C:/Program Files (x86)/openvibe-2.2.0/share/openvibe/scenarios/bci-examples/motor-imagery-CSP/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 4.250000
  Feedback Duration (in sec) = 8.750000
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
Stimulations=#29, Amplitude=#23.Probability values -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false

0x341d3912 Acquisition client
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024

0x341d3912 Simple DSP "Shift Values to Negative" => #32
  Equation = x-3
-> 0x341d3912 Sign Change Detector
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 1
-> 0x341d3912 Run Command
  Stimulation 1 = OVTK_StimulationId_Label_01
  Command 1 = "C:/Program Files (x86)/AutoIt3/AutoIt3_x64.exe" C:/Users/ajay/Documents/LexiCon/OpenVibe/OpenViBE-workshop_tie-fighter-demo/press_space.au3
Data=#32 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

0x341d3912 Channel Selector "1;2"
  Channel List = 1;2
  Action = Select
  Channel Matching Method = Smart

Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
