OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renad / Fabien Lotte
0x9f5c4075 = File Replay
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used to replay online sessions.
  The scenario displays the classification confusion matrix,
  along with the global performance evolving during the sessions.

  With this scenario, you can watch the performance of the classifier
  during time, and for each class.
Comment
  Here we want to classify only during trials. This is achieved by
  a simple lua script and a stream switch.

  The Switch Director is a Lua scripting box
  that controls a Stream Switch box.
  When an instruction is received (OVTK_StimulationId_Right / Left)
  the switch director tells the stream switch to redirect
  its signal input to the first output (i.e. routed to a classifier).
  Otherwise, the feature input is redirected to the second output,
  i.e. nothing.
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Then comes the feature extraction part.

  The signal is filtered in a large alpha/beta [8 30] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  The Classifier Processor classifies
   everytime it receives a new feature vector.

  If we want an accurate performance computation,
  we need to classify only when the participant
  is actually doing the task, i.e.
  when an instruction (left or right) is received.
  This is achieved by the switch above.
Comment
  Finally, the feature vectors are classified with an LDA
  classifier. Note that the state vector of the classifier
  (which in the case of the LDA is the distance to the
  separation plane) is sent to the Graz Visualization
  box for feedback !

  In order to display correct feedback,
  the Graz Visualization box expects a negative
  value for one class and a positive value for the other
  class.
Comment
  The Confusion Matrix computation needs
  the instruction flow, and the classification flow
  to compare them, for each class.

  As the instructions (OVTK_StimulationId_Left and _Right)
  are included in the stimulation stream, we need to filter
  away the other information in it with Stimulation Filter.

  Same goes for the Classifier Accuracy Measure that
  computes the global performance of the classifier.

Generic stream reader => #0
  Filename = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/Data/Test/trial-2019-03-23-1-motor-imagery-csp-4-online-alpha-beta-[2019.03.23-15.31.46].ov
#0.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Pause
#0.Output stream 2 -> Channel Selector "1:16" => #2
  Channel List = 1:16
  Action = Select
  Channel Matching Method = Smart
#0.Output stream 3 -> Switch director => #3
  Lua Script = C:/Program Files (x86)/openvibe-2.2.0/share/openvibe/scenarios/bci-examples/motor-imagery-CSP/motor-imagery-bci-epoch-selector.lua
  offset = 0.5
  duration = 4.0
Triggers=#3, Matrix=#2 -> Stream Switch => #4
  Default to output 1 = false
  Switch stim for output 1 = OVTK_GDF_Correct
  Switch stim for output 2 = OVTK_GDF_Incorrect
#4.Output -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 1
-> CSP Spatial Filter
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-23-1-csp-spatial-filter-8-12Hz.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #10
  Equation = log(1+x)
#4.Output -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 8
  Pass band ripple (dB) = 1
-> CSP Spatial Filter
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-23-1-csp-spatial-filter-4-8Hz.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #16
  Equation = log(1+x)
#4.Output -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 16
  Pass band ripple (dB) = 1
-> CSP Spatial Filter
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-23-1-csp-spatial-filter-12-16Hz.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #22
  Equation = log(1+x)
#4.Output -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 16
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 1
-> CSP Spatial Filter
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-23-1-csp-spatial-filter-16-20Hz.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #28
  Equation = log(1+x)
#4.Output -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 20
  High cut frequency (Hz) = 38
  Pass band ripple (dB) = 1
-> CSP Spatial Filter
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/trial-2019-03-23-1-csp-spatial-filter-20-38Hz.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #34
  Equation = log(1+x)
Input stream 1=#16, Input stream 2=#10, Input stream 3=#22, Input stream 4=#28, Input stream 5=#34 -> Feature aggregator => #35
Features=#35 -> Classifier processor => #36
  Filename to load configuration from = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/2-Classifier Trainer/trial-2019-03-23-1-motor-imagery-bci-config-classifier-alpha-beta.cfg
Input stream 2=#0.Output stream 3 -> Identity => #37
#37.Output stream 2 -> Stimulation Filter => #38
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Left
  Stimulation range end = OVTK_GDF_Left
  Action to perform(1) = Select
  Stimulation range begin(1) = OVTK_GDF_Right
  Stimulation range end(1) = OVTK_GDF_Right
Targets=#38, Classification results=#36.Labels -> Confusion Matrix
  Percentages = true
  Sums = false
  Class 1 = OVTK_GDF_Left
  Class 2 = OVTK_GDF_Right
-> Matrix Display "Confusion Matrix"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Targets=#38, LDA=#36.Labels -> Accuracy Measure
Stimulations=#37.Output stream 2, Amplitude=#36.Hyperplane distance -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
