OpenViBE-Scenario
Comment
  This scenario allows to visualize the signal coming from eeg cap through the acquisition server.

  For the experiment, FCz, C1, Cz, C2 and CPz are used
Comment
  Use Generic stream reader
  instead of Acquisition client
  to replay recorded signals

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
Signal=#1 -> Signal display "All channels"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#0.Signal strea -> Channel Selector "FCz,C1,Cz,C2,CPz" => #3
  Channel List = FCz;C1;Cz;C2;CPz
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
Signal=#4 -> Signal display "Signal 4-40Hz"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
Signal=#3 -> Signal display "Raw signal"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100

Generic stream reader
  Filename = ${Player_ScenarioDirectory}/signals/workshop_session_example.ov
