OpenViBE-Scenario
Comment
  Overview

  This scenario allows to run
  an online self-paced session of feet motor imagery
  No instructions are presented to the user.

  The feedback is presented through signal displays : one for the brain
  activity on the Cz electrode, and one for the band power in
  the beta activity,related to (imagined) feet movement.

  An external feedback is possible through VRPN:
  launch the vr-demo-tie-fighter to see  a spaceship
  lifted when a spike of Beta activity is detected.

  For more information on the processing pipeline,
  please look at the scenario neurofeedback/neurofeedback.xml.
Comment
  Use Generic stream reader
  instead of Acquisition client
  to replay recorded signals
Comment
  The processing chain filter the signal
   in the [16-24Hz] frequency band (Beta band)
  Then, it select 1s epochs every 0.1s.
  This signal is squared and average to get the Beta power.

  Finally it's cropped and shifted to be sent
   to the tie-fighter application via VRPN
Comment
  These two boxes (Crop and simple DSP)  are configured
  with respect to a previous calibration session.
  See threshold_movement_calibration.xml

  The calibration computed the Mean and Variance
  of the Beta activity during 30sec of inactivity.
Comment
  Crop the signal between
  Mean + 3 * sqrt(Variance)
  and 100
Comment
  VRPN
  The button Server tells the tie-fighter application
  in which step the experiment is. It also triggers
  the instructions given to the user.

  The Analog Server provides the feedback value.
Comment
  Center all values on
  Mean + 3 * sqrt(Variance)
Comment
  The signal display provides
  real-time and asynchronous feedback of the user's
  brain activity in the Beta band,
  related to feet movement.

Generic stream reader
  Filename = ${Player_ScenarioDirectory}/signals/workshop_session_example.ov

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#1.Experiment information, Input stream 2=#1.Signal strea, Input stream 3=#1.Stimulations, Input stream 4=#1.Channel localisation -> Identity => #2
#2.Output stream 2 -> Channel Selector "FCz,C1,Cz,C2,CPz" => #3
  Channel List = FCz;C1;Cz;C2;CPz
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Fitler Coefficients = -1;-1;4;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 5
-> Temporal filter "band-pass 16-24Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 16
  High cut frequency (Hz) = 24
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Simple DSP "Band Power"
  Equation = x*x
-> Signal average => #8
-> Crop => #9
  Crop method = Min/Max
  Min crop value = 5.30
  Max crop value = 100
-> Simple DSP "Shift values" => #10
  Equation = x-5.30
Signal=#10 -> Signal display "Beta Power Cropped and shifted"
  Time Scale = 100.000000
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100.000000
#10 -> Analog VRPN server
  Peripheral name = openvibe-vrpn
Signal=#8 -> Signal display "Beta Power"
  Time Scale = 100.000000
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100.000000
Signal=#3, Stimulations=#2.Output stream 3 -> Signal display "Beta Signal"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
Input 1=#2.Output stream 3, Input 2=#2.Output stream 3, Input 3=#2.Output stream 3, Input 4=#2.Output stream 3, Input 5=#2.Output stream 3, Input 6=#2.Output stream 3, Input 7=#2.Output stream 3 -> Button VRPN server
  Peripheral name = openvibe-vrpn
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_01
  Button 2 ON = OVTK_StimulationId_Label_02
  Button 2 OFF = OVTK_StimulationId_Label_03
  Button 3 ON = OVTK_StimulationId_Label_04
  Button 3 OFF = OVTK_StimulationId_Label_05
  Button 4 ON = OVTK_GDF_Stage_1
  Button 4 OFF = OVTK_StimulationId_Label_0C
  Button 5 ON = OVTK_GDF_Stage_2
  Button 5 OFF = OVTK_StimulationId_Label_0D
  Button 6 ON = OVTK_GDF_Stage_3
  Button 6 OFF = OVTK_StimulationId_Label_0E
  Button 7 ON = OVTK_GDF_Stage_4
  Button 7 OFF = OVTK_StimulationId_Label_0F
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2, Input stream 3=#2.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/use-the-force-self-paced-[$core{date}-$core{time}].ov
  Use compression = true
0xc67a01dc Self-paced session => #17
  Lua Script = ${Player_ScenarioDirectory}/stim_Use-the-force_freeTime.lua
  First waiting time = 5
  Imaginary duration = 480
-> Sound Player
  PLAY trigger = OVTK_StimulationId_Beep
  STOP trigger = OVTK_StimulationId_Label_01
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = False
Input stream 2=#9, Input stream 3=#17 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/Crop/use-the-force-self-paced-[$core{date}-$core{time}].ov
  Use compression = true
