OpenViBE-Scenario
Comment
  Overview

  This scenario calculate the threshold used for Beta
  rebound detection in Use-the-force application.

  Compute the Mean and Variance
  of the Beta activity during 30sec of inactivity.
Comment
  Use Generic stream reader
  instead of Acquisition client
  to replay recorded signals
Comment
  The processing chain filter the signal
   in the [16-24Hz] frequency band (Beta band)
  Then, it select 1s epochs every 0.1s.
  This signal is squared and average to get the Beta power.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Lua Stimulator => #1
  Lua Script = ${Player_ScenarioDirectory}/stim_Use-the-force_calibration.lua
-> Sound Player
  PLAY trigger = OVTK_StimulationId_Label_01
  STOP trigger =
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = False
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal strea, Input stream 3=#1, Input stream 4=#0.Channel localisation -> Identity => #3
#3.Output stream 2 -> Channel Selector "FCz,C1,Cz,C2,CPz" => #4
  Channel List = FCz;C1;Cz;C2;CPz
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Fitler Coefficients = -1;-1;4;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 5
-> Temporal filter "band-pass 16-24Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 16
  High cut frequency (Hz) = 24
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average => #10
  Averaging type = Moving epoch average
  Epoch count = 4
Input signal=#10, Input stimulations=#1 -> Stimulation based epoching => #11
  Epoch duration (in sec) = 25
  Epoch offset (in sec) = 2.5
  Stimulation to epoch from = OVTK_StimulationId_Label_01
#11.Epoched signal -> Univariate Statistics => #12
  Mean = true
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#12.Mean -> Mean Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#12.Variance -> Variance Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Input - A=#12.Mean, Input - B=#12.Variance -> Simple DSP
  Equation = A+3*sqrt(B)
-> Matrix Display "Mean + 3 * sqrt(Variance)"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Signal=#4, Stimulations=#3.Output stream 3 -> Signal display "Beta Signal"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
Input stream 1=#3.Output stream 1, Input stream 2=#3.Output stream 2, Input stream 3=#3.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/use-the-force-calibration-[$core{date}-$core{time}].ov
  Use compression = true
#1 -> Sound Player
  PLAY trigger = OVTK_StimulationId_Label_00
  STOP trigger =
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = False
#1 -> Display cue image
  Display images in full screen = true
  Clear screen Stimulation = OVTK_StimulationId_Label_01
  Cue Image 1 = ${Player_ScenarioDirectory}/img7.jpg
  Stimulation 1 = OVTK_StimulationId_Label_00

Generic stream reader
  Filename = ${Player_ScenarioDirectory}/signals/workshop_calibration_example.ov
