OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Overview

  This scenario allows to run
  an online self-paced session of feet motor imagery
  No instructions are presented to the user.

  The feedback is presented through signal displays : one for the brain
  activity on the Cz electrode, and one for the band power in
  the beta activity,related to (imagined) feet movement.

  An external feedback is possible through VRPN:
  launch the vr-demo-tie-fighter to see  a spaceship
  lifted when a spike of Beta activity is detected.

  For more information on the processing pipeline,
  please look at the scenario neurofeedback/neurofeedback.xml.
Comment
  FCz;C1;Cz;C2;CPz
Comment
  2;5;1;4;3
Comment
  The processing chain filter the signal
   in the [16-24Hz] frequency band (Beta band)
  Then, it select 1s epochs every 0.1s.
  This signal is squared and average to get the Beta power.

  Finally it's cropped and shifted to be sent
   to the tie-fighter application via VRPN
Comment
  VRPN
  The button Server tells the tie-fighter application
  in which step the experiment is. It also triggers
  the instructions given to the user.

  The Analog Server provides the feedback value.
Comment
  These two boxes (Crop and simple DSP)  are configured
  with respect to a previous calibration session.
  See threshold_movement_calibration.xml

  The calibration computed the Mean and Variance
  of the Beta activity during 30sec of inactivity.
Comment
  Crop the signal between
  Mean + 3 * sqrt(Variance)
  and 100
Comment
  The signal display provides
  real-time and asynchronous feedback of the user's
  brain activity in the Beta band,
  related to feet movement.
Comment
  Center all values on
  Mean + 3 * sqrt(Variance)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Signal stream, Input stream 2=#0.Stimulations -> Identity => #1
#1.Output stream 2 -> 0x341d3912 Sound Player
  PLAY trigger = OVTK_StimulationId_Beep
  STOP trigger = OVTK_StimulationId_Label_01
  File to play = C:/Program Files/openvibe-2.2.0-64bit/share/openvibe/plugins/stimulation/ov_beep.wav
  Loop = False
#1.Output stream 1 -> Channel Selector "4;12;2;13;6;1;3" => #3
  Channel List = 4;12;2;13;6;1;3
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Filter Coefficients = -1;-1;4;-1;-1;4;4
  Number of Output Channels = 1
  Number of Input Channels = 7
  Filter matrix file =
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 16
  High Cut-off Frequency (Hz) = 24
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1.000000
  Epoch intervals (in sec) = 0.100000
-> Simple DSP "Band Power"
  Equation = x*x
-> Signal average => #8
Data=#8 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#8 -> Crop => #10
  Crop method = Min/Max
  Min crop value = 250.91
  Max crop value = 300
Input stream 2=#10, Input stream 3=#1.Output stream 2 -> Generic stream writer
  Filename = C:/Users/ajay/Documents/LexiCon/OpenVibe/OpenViBE-workshop_tie-fighter-demo/Crop/use-the-force-self-paced-[$core{date}-$core{time}].ov
  Use compression = true
#10 -> Simple DSP "Shift Values" => #12
  Equation = x-250.91
-> Simple DSP "Shift Values to Negative" => #13
  Equation = x-3
-> Sign Change Detector
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 1
-> Run Command
  Stimulation 1 = OVTK_StimulationId_Label_01
  Command 1 = "C:/Program Files (x86)/AutoIt3/AutoIt3_x64.exe" C:/Users/ajay/Documents/LexiCon/OpenVibe/OpenViBE-workshop_tie-fighter-demo/press_space.au3
Data=#13 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#12 -> 0x341d3912 Analog VRPN Server
  Peripheral name = openvibe-vrpn
Data=#3, Stimulations=#1.Output stream 2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 500
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input Signal=#1.Output stream 1, Input Stimulations=#1.Output stream 2 -> Generic stream writer
  Filename = C:/Users/ajay/Documents/LexiCon/OpenVibe/OpenViBE-workshop_tie-fighter-demo/Experiment/record-[$core{date}-$core{time}].ov
  Use compression = false
Input 1=#1.Output stream 2, Input 2=#1.Output stream 2, Input 3=#1.Output stream 2, Input 4=#1.Output stream 2, Input 5=#1.Output stream 2, Input 6=#1.Output stream 2, Input 7=#1.Output stream 2 -> 0x341d3912 Button VRPN server
  Peripheral name = openvibe-vrpn
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_01
  Button 2 ON = OVTK_StimulationId_Label_02
  Button 2 OFF = OVTK_StimulationId_Label_03
  Button 3 ON = OVTK_StimulationId_Label_04
  Button 3 OFF = OVTK_StimulationId_Label_05
  Button 4 ON = OVTK_GDF_Stage_1
  Button 4 OFF = OVTK_StimulationId_Label_0C
  Button 5 ON = OVTK_GDF_Stage_2
  Button 5 OFF = OVTK_StimulationId_Label_0D
  Button 6 ON = OVTK_GDF_Stage_3
  Button 6 OFF = OVTK_StimulationId_Label_0E
  Button 7 ON = OVTK_GDF_Stage_4
  Button 7 OFF = OVTK_StimulationId_Label_0F

0x341d3912 Self-paced session
  Lua Script = C:/Users/ajay/Documents/LexiCon/OpenVibe/OpenViBE-workshop_tie-fighter-demo/stim_Use-the-force_freeTime.lua
  First waiting time = 5
  Imaginary duration = 480
