OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Overview

  This scenario allows to run
  an online self-paced session of feet motor imagery
  No instructions are presented to the user.

  The feedback is presented through signal displays : one for the brain
  activity on the Cz electrode, and one for the band power in
  the beta activity,related to (imagined) feet movement.

  An external feedback is possible through VRPN:
  launch the vr-demo-tie-fighter to see  a spaceship
  lifted when a spike of Beta activity is detected.

  For more information on the processing pipeline,
  please look at the scenario neurofeedback/neurofeedback.xml.
Comment
  The processing chain filter the signal
   in the [16-24Hz] frequency band (Beta band)
  Then, it select 1s epochs every 0.1s.
  This signal is squared and average to get the Beta power.

  Finally it's cropped and shifted to be sent
   to the tie-fighter application via VRPN
Comment
  These two boxes (Crop and simple DSP)  are configured
  with respect to a previous calibration session.
  See threshold_movement_calibration.xml

  The calibration computed the Mean and Variance
  of the Beta activity during 30sec of inactivity.
Comment
  VRPN
  The button Server tells the tie-fighter application
  in which step the experiment is. It also triggers
  the instructions given to the user.

  The Analog Server provides the feedback value.
Comment
  Crop the signal between
  Mean + 3 * sqrt(Variance)
  and 100
Comment
  Center all values on
  Mean + 3 * sqrt(Variance)
Comment
  The signal display provides
  real-time and asynchronous feedback of the user's
  brain activity in the Beta band,
  related to feet movement.

0x341d3912 Acquisition client
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024

Generic stream reader => #1
  Filename = C:/Users/ajay/Documents/Openvibe/OpenViBE-workshop_tie-fighter-demo/signals/workshop_session_example.ov
Self-paced session => #2
  Lua Script = C:/Users/ajay/Documents/Openvibe/OpenViBE-workshop_tie-fighter-demo/stim_Use-the-force_freeTime.lua
  First waiting time = 5
  Imaginary duration = 480
-> 0x341d3912 Sound Player
  PLAY trigger = OVTK_StimulationId_Beep
  STOP trigger = OVTK_StimulationId_Label_01
  File to play = C:/Program Files/openvibe-2.2.0-64bit/share/openvibe/plugins/stimulation/ov_beep.wav
  Loop = False
Input stream 1=#1.Output stream 2, Input stream 2=#2 -> Identity => #4
Input Signal=#4.Output stream 1, Input Stimulations=#4.Output stream 2 -> 0x341d3912 Generic stream writer
  Filename = record-[$core{date}-$core{time}].ov
  Use compression = false
#4.Output stream 1 -> Channel Selector "FCz;C1;Cz;C2;CPz" => #6
  Channel List = FCz;C1;Cz;C2;CPz
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Filter Coefficients = -1;-1;4;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 5
  Filter matrix file =
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 16
  High Cut-off Frequency (Hz) = 24
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1.000000
  Epoch intervals (in sec) = 0.100000
-> Simple DSP "Band Power"
  Equation = x*x
-> Signal average => #11
-> Crop => #12
  Crop method = Min/Max
  Min crop value = 7.04
  Max crop value = 100
Input stream 2=#12, Input stream 3=#2 -> Generic stream writer
  Filename = C:/Users/ajay/Documents/Openvibe/OpenViBE-workshop_tie-fighter-demo/Crop/use-the-force-self-paced-[$core{date}-$core{time}].ov
  Use compression = true
#12 -> Simple DSP "Shift Values" => #14
  Equation = x-7.04
Data=#14 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#14 -> Analog VRPN Server
  Peripheral name = openvibe-vrpn
Data=#11 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#6 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input 1=#4.Output stream 2, Input 2=#4.Output stream 2, Input 3=#4.Output stream 2, Input 4=#4.Output stream 2, Input 5=#4.Output stream 2, Input 6=#4.Output stream 2, Input 7=#4.Output stream 2 -> Button VRPN server
  Peripheral name = openvibe-vrpn
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_01
  Button 2 ON = OVTK_StimulationId_Label_02
  Button 2 OFF = OVTK_StimulationId_Label_03
  Button 3 ON = OVTK_StimulationId_Label_04
  Button 3 OFF = OVTK_StimulationId_Label_05
  Button 4 ON = OVTK_GDF_Stage_1
  Button 4 OFF = OVTK_StimulationId_Label_0C
  Button 5 ON = OVTK_GDF_Stage_2
  Button 5 OFF = OVTK_StimulationId_Label_0D
  Button 6 ON = OVTK_GDF_Stage_3
  Button 6 OFF = OVTK_StimulationId_Label_0E
  Button 7 ON = OVTK_GDF_Stage_4
  Button 7 OFF = OVTK_StimulationId_Label_0F
