OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Overview

  This scenario calculate the threshold used for Beta
  rebound detection in Use-the-force application.

  Compute the Mean and Variance
  of the Beta activity during 30sec of inactivity.
Comment
  Use Generic stream reader
  instead of Acquisition client
  to replay recorded signals
Comment
  The processing chain filter the signal
   in the [16-24Hz] frequency band (Beta band)
  Then, it select 1s epochs every 0.1s.
  This signal is squared and average to get the Beta power.
Comment
  First, I'd move "stimulation based epoching" before the "time based epoching"
  to get rid of the crucial error. The intended operation might change somewhat.
  The problem with the old ordering is that if there is stimulation at a time that
  corresponds to multiple overlapping chunks, the box was probably not behaving too
  well -- thats why such usage is now prevented.

  http://openvibe.inria.fr/forum/viewtopic.php?f=17&t=9365

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Lua Stimulator => #1
  Lua Script = C:/Users/ajay/Documents/LexiCon/OpenVibe/OpenViBE-workshop_tie-fighter-demo/stim_Use-the-force_calibration.lua
Input stream 1=#0.Signal stream, Input stream 2=#1 -> Identity => #2
#2.Output stream 1 -> Channel Selector "4;12;2;13;6;1;3" => #3
  Channel List = 4;12;2;13;6;1;3
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Filter Coefficients = -1;-1;4;-1;-1;4;4
  Number of Output Channels = 1
  Number of Input Channels = 7
  Filter matrix file =
-> Temporal Filter => #5
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 16
  High Cut-off Frequency (Hz) = 24
  Band Pass Ripple (dB) = 0.5
Input signal=#5, Input stimulations=#2.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 25
  Epoch offset (in sec) = 2.5
  Stimulation to epoch from = OVTK_StimulationId_Label_00
-> Time based epoching
  Epoch duration (in sec) = 1.000000
  Epoch intervals (in sec) = 0.100000
-> Simple DSP "Band Power"
  Equation = x*x
-> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Univariate Statistics => #11
  Mean = true
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
Input - A=#11.Mean, Input - B=#11.Variance -> Simple DSP ""
  Equation = A+3*sqrt(B)
-> Matrix Display "Mean + 3 * sqrt(Variance)"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#11.Variance -> Variance Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#11.Mean -> Mean Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#5, Stimulations=#2.Output stream 2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#3, Stimulations=#2.Output stream 2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#2.Output stream 2 -> 0x341d3912 Sound Player
  PLAY trigger = OVTK_StimulationId_Label_01
  STOP trigger = OVTK_StimulationId_Label_01
  File to play = ${Path_Data}/plugins/stimulation/ov_beep_2.WAV
  Loop = False
#2.Output stream 2 -> 0x341d3912 Sound Player
  PLAY trigger = OVTK_StimulationId_Label_00
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = ${Path_Data}/plugins/stimulation/ov_beep_2.WAV
  Loop = False
#2.Output stream 2 -> Display cue image
  Display images in full screen = true
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_Label_01
  Cue Image 1 = C:/Users/ajay/Documents/LexiCon/OpenVibe/OpenViBE-workshop_tie-fighter-demo/img7.jpg
  Stimulation 1 = OVTK_StimulationId_Label_00
Input stream 2=#2.Output stream 1, Input stream 3=#2.Output stream 2 -> Generic stream writer
  Filename = C:/Users/ajay/Documents/LexiCon/OpenVibe/OpenViBE-workshop_tie-fighter-demo/use-the-force-calibration-[$core{date}-$core{time}].ov
  Use compression = true
