OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard
0x9f5c4075 = Signal Monitoring
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The Temporal Filter
  box transform the signal
  so you can see what is actually
  used online.
Comment
  Overview

  This scenario can be used in order
  to check the quality of the signals
  before starting an experiment.

  One should definitely
  check the quality of the signals
  and ensure that :

  - eye blinks are visible
  - jaw clenching are visible
  - alpha waves are visible when closing eyes

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:16" => #1
  Channel List = 1:16
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 40.000000
  Pass band ripple (dB) = 0.500000
Input stream 1=#2, Input stream 2=#1, Input stream 3=#0.Stimulations -> Identity => #3
  0xac367a9c = 6
Data=#3.Output stream 1, Stimulations=#3.Output stream 3 -> Signal display "Raw signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#3.Output stream 2, Stimulations=#3.Output stream 3 -> Signal display "Filtered signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false

0x341d3912 Generic stream reader => #6
  Filename = C:/Users/sagar/Desktop/trial3-fyp.ov
Data=#6.Output stream 2, Stimulations=#6.Output stream 3 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
